OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Extract 8 EEG channels from
Comment
  4th Order Butterworth Bandpass Filter 13 - 30 Hz and 0.5 dB ripple
Comment
  Split data in epoch for averaging
Comment
  Calculate signal power

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Index
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13.0
  High Cut-off Frequency (Hz) = 30.0
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP "Calculate Power"
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spatial Filter => #6
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
Input stream=#6 -> CSV File Writer
  Filename = C:/Users/felixmaldonado/OneDrive - Drexel University/focus-tracker/data/emma_focus.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 0.1
  Vertical Scale = 1
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
