OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream -> Identity => #1
#1.Output stream 2 -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Index
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
-> Simple DSP => #5
  Equation = x*x
Data=#5 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Clock stimulator => #7
  Interstimulation interval (in sec) = 60
  Stimulation = OVTK_StimulationId_Label_00
Input stream=#5, Stimulations stream=#7 -> CSV File Writer
  Filename = C:/Users/felixmaldonado/OneDrive - Drexel University/focus-tracker/data/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13.0
  High Cut-off Frequency (Hz) = 30.0
  Band Pass Ripple (dB) = 0.5
